<Feature xmlns="http://www.sila-standard.org" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" Category="ardea" FeatureVersion="1.0" MaturityLevel="Draft" Originator="jp.riken" SiLA2Version="1.0" xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareService</Identifier>
  <DisplayName>Labware Service</DisplayName>
  <Description>Ardea labware handling, plus direct control of the two actuators it drives.
    PickLabware and PutLabware orchestrate the DENSO robot (b-CAP tasks) and the
    KEYENCE hand (KV COM+): each runs the approach task, actuates the hand (close for
    pick, open for put), runs the retract task, and confirms the robot returned to the
    retract pose. Both end at the retract pose: PutLabware does not return the robot to
    the base pose, so a Pick following a Put does not have to undo that move.
    PickLabware may start at either the base or the retract pose (from the base pose it
    moves to the retract pose first); PutLabware requires the retract pose. Neither
    command moves the carriage. MoveHand and ActivateHand drive the gripper on its own,
    and ToggleLight switches the machine light (a robot-controller variable). Those three
    are utilities for setup and debugging rather than labware handling; they live here to
    keep the server to one Ardea handling feature.</Description>
  <!-- Commands -->
  <Command>
    <Identifier>PickLabware</Identifier>
    <DisplayName>Pick Labware</DisplayName>
    <Description>Pick a labware from the station at the current carriage position, on the side the
      arm already faces (the rail is served from both sides, so a position can hold two
      stations facing opposite ways; this command never turns the arm, it works the side
      it is pointed at). Verify the robot is at that direction's base or retract pose and,
      from the base pose, move it to the retract pose (which is where the approach task
      starts); then run the pick-approach task, close the hand, run the pick-retract task
      (which returns the robot to the retract pose), and confirm the retract pose.
      Intermediate responses report the current phase.</Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the robot ended at the retract pose after the pick.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the pick sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtBasePose</Identifier>
      <Identifier>RobotNotAtKnownPose</Identifier>
      <Identifier>NoStationAtPosition</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>PutLabware</Identifier>
    <DisplayName>Put Labware</DisplayName>
    <Description>Place a labware on the station at the current carriage position, on the side the arm
      already faces (see PickLabware: a position can hold two stations, and this command
      does not turn the arm either). Verify the robot is at that direction's retract pose
      (not the base pose), run the approach task, open the hand, run the retract task
      (robot to the retract pose) and confirm the retract pose. The robot is left there &#8212;
      it is not returned to the base pose, so a PickLabware at this station can start
      straight away. Intermediate responses report the current phase.</Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the robot ended at the retract pose after the put.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the put sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtRetractPose</Identifier>
      <Identifier>RobotNotAtKnownPose</Identifier>
      <Identifier>NoStationAtPosition</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>Transfer</Identifier>
    <DisplayName>Transfer</DisplayName>
    <Description>Carry a labware from one station to another, driving the whole route: move the
      carriage to the source, turn the arm to face it if it faces the other way, pick,
      move to the destination, turn again if needed, and put. The carriage therefore need
      not start at the source station. The arm must start at one of the four known poses
      (base, retract, or either 180&#176;-turned counterpart) and the hand must be fully open;
      it ends at the destination's retract pose, ready for the next command. The turn is
      performed holding the labware, which the machine supports. Intermediate responses
      report the current phase.</Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>SourceStation</Identifier>
      <DisplayName>Source Station</DisplayName>
      <Description>Name of the station to take the labware from, as listed by StationNames.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>DestinationStation</Identifier>
      <DisplayName>Destination Station</DisplayName>
      <Description>Name of the station to place the labware on, as listed by StationNames.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>CarriagePosition</Identifier>
      <DisplayName>Carriage Position</DisplayName>
      <Description>The carriage position [mm] after the transfer, i.e. the destination station.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </Response>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the arm ended at the destination direction's retract pose.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the transfer.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>InvalidStation</Identifier>
      <Identifier>RobotNotAtKnownPose</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>CarriageNotReady</Identifier>
      <Identifier>CarriageFault</Identifier>
      <Identifier>MoveTimeout</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>GraspFailed</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>MoveHand</Identifier>
    <DisplayName>Move Hand</DisplayName>
    <Description>Move the hand (gripper) to a position, in device units: 0 is fully closed and the
      configured open position (140 on this machine) fully open. Speed and grip force are
      not parameters &#8212; they come from the motion configuration, so the hand never grips
      with an arbitrary force. If the hand is found deactivated it is re-activated first,
      but only when the jaws are open: re-activation strokes them, which would drop a held
      labware. Reports the position reached and whether the jaws stopped short of the
      commanded one, which is what holding an object looks like. Intermediate responses
      report the current phase.</Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>Position</Identifier>
      <DisplayName>Position</DisplayName>
      <Description>Target position in device units: 0 = fully closed .. open position = fully open.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>Position</Identifier>
      <DisplayName>Position</DisplayName>
      <Description>The hand position reached (device units), read back after the move.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </Response>
    <Response>
      <Identifier>StoppedShort</Identifier>
      <DisplayName>Stopped Short</DisplayName>
      <Description>True if the jaws stopped before the commanded position, i.e. something is held (grip bit D6002.6 = 0).</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the hand move.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>InvalidHandPosition</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>ActivateHand</Identifier>
    <DisplayName>Activate Hand</DisplayName>
    <Description>Re-activate the hand by toggling its activation signal off and on again, and wait
      for the activated state. Writing the signal on alone does not recover a hand that is
      stuck deactivated &#8212; only the falling edge does. Activation physically strokes the
      jaws, so the command refuses unless they are fully open. Intermediate responses
      report the current phase.</Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>Activated</Identifier>
      <DisplayName>Activated</DisplayName>
      <Description>True if the hand reported the activated state before the timeout.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the activation.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>ToggleLight</Identifier>
    <DisplayName>Toggle Light</DisplayName>
    <Description>Turn the machine light off if it is on and on if it is off, and report which it
      ended up as. The light is a boolean variable on the robot controller (read and
      written over b-CAP), not a PLC signal, and its name comes from the configuration.</Description>
    <Observable>No</Observable>
    <Response>
      <Identifier>IsOn</Identifier>
      <DisplayName>Is On</DisplayName>
      <Description>True if the light is on after the toggle.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>VariableAccessError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <!-- Properties -->
  <Property>
    <Identifier>LightIsOn</Identifier>
    <DisplayName>Light Is On</DisplayName>
    <Description>Whether the machine light is currently on. Read so a client can act on the actual
      state instead of guessing it from a blind ToggleLight.</Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Boolean</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>VariableAccessError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <!-- Command execution errors -->
  <DefinedExecutionError>
    <Identifier>InvalidStation</Identifier>
    <DisplayName>Invalid Station</DisplayName>
    <Description>A station name is not one the server knows, or the position it maps to is outside the carriage travel range.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotNotAtKnownPose</Identifier>
    <DisplayName>Robot Not At Known Pose</DisplayName>
    <Description>The arm is at none of the four known poses (base, retract, inverse base, inverse retract), so a transfer cannot start.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>CarriageNotReady</Identifier>
    <DisplayName>Carriage Not Ready</DisplayName>
    <Description>The travel carriage is not ready to move (D6000.0 off or D6000.1 on).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>CarriageFault</Identifier>
    <DisplayName>Carriage Fault</DisplayName>
    <Description>The travel carriage reports a fault or alarm (D6005 non-zero).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>MoveTimeout</Identifier>
    <DisplayName>Move Timeout</DisplayName>
    <Description>The carriage move was not acknowledged or did not complete within the configured timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>InvalidHandPosition</Identifier>
    <DisplayName>Invalid Hand Position</DisplayName>
    <Description>The requested hand position is outside 0 .. the configured open position.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>VariableAccessError</Identifier>
    <DisplayName>Variable Access Error</DisplayName>
    <Description>Failed to read or write the light variable on the robot controller.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotNotAtRetractPose</Identifier>
    <DisplayName>Robot Not At Retract Pose</DisplayName>
    <Description>The robot is not at the retract pose, which PutLabware requires (the base pose is not allowed).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotNotAtBasePose</Identifier>
    <DisplayName>Robot Not At Base Pose</DisplayName>
    <Description>The robot is at neither of the two poses PickLabware can start from (the station direction's base pose or retract pose). The identifier is kept for compatibility; it no longer means "the retract pose is not allowed".</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>NoStationAtPosition</Identifier>
    <DisplayName>No Station At Position</DisplayName>
    <Description>No station is defined at the current carriage position, or none there faces the way the arm does, so Pick/Put cannot resolve which task pair to run. The message names any station at that position facing the other way.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandNotOpen</Identifier>
    <DisplayName>Hand Not Open</DisplayName>
    <Description>The hand is not fully open; PickLabware requires the hand open before starting.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PoseNotRestored</Identifier>
    <DisplayName>Pose Not Restored</DisplayName>
    <Description>The robot did not reach the retract pose: after a pick-retract or put-retract task, or before the pick approach when it had to be moved there from the base pose.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>ControllerConnectionError</Identifier>
    <DisplayName>Controller Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the robot controller over b-CAP.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotAccessError</Identifier>
    <DisplayName>Robot Access Error</DisplayName>
    <Description>Failed to acquire the robot or read the current joint angles.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskExecutionTimeout</Identifier>
    <DisplayName>Task Execution Timeout</DisplayName>
    <Description>A DENSO task (PAC program) did not start or finish within the configured timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskAccessError</Identifier>
    <DisplayName>Task Access Error</DisplayName>
    <Description>A DENSO task failed to run or stopped abnormally.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcConnectionError</Identifier>
    <DisplayName>PLC Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the PLC over KV COM+.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcAccessError</Identifier>
    <DisplayName>PLC Access Error</DisplayName>
    <Description>Failed to read or write a PLC device.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandError</Identifier>
    <DisplayName>Hand Error</DisplayName>
    <Description>The hand failed to activate or to complete a chuck/unchuck within the timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>GraspFailed</Identifier>
    <DisplayName>Grasp Failed</DisplayName>
    <Description>Grasp verification failed: PickLabware did not grasp a labware (hand closed fully = empty), or PutLabware was not holding a labware to place.</Description>
  </DefinedExecutionError>
</Feature>
