<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="org.riken"
         Category="instruments"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">

  <Identifier>PlateLocController</Identifier>
  <DisplayName>PlateLoc Controller</DisplayName>
  <Description>
    A SiLA Server for controlling the PlateLoc made by Agilent Technologies.
    
    The PlateLoc is a fully automated laboratory heat sealer. The PlateLoc can apply various seals to various types of microplates.
    Model number: G5585B
    Product URL : https://www.chem-agilent.com/contents.php?id=1006101
    
    VWorks ActiveX Control (version 13.1.0.1366 or later) is required on the computer running this SiLA Server.
  </Description>

  <!-- Commands -->
  <Command>
    <Identifier>StartCycle</Identifier>
    <DisplayName>Start Cycle</DisplayName>
    <Description>
      Start a seal cycle.
      This command triggers the execution of steps moving stage in, applying seal, and moving stage out in sequence.
      If you call this command while another observable command is running, the request will be rejected.
      
      Calling this command invokes the instrument command StartCycle.

      Status required to execute this command: Idle
      Status while this command is running: Running
      Status after this command finishes
        If it completes normally: Idle
        If an error occurs: Error
    </Description>
    <Observable>Yes</Observable>
    <DefinedExecutionErrors>
      <Identifier>CommandIsRunning</Identifier>
      <Identifier>NotInitialized</Identifier>
      <Identifier>CommandExecutionAborted</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>StopCycle</Identifier>
    <DisplayName>Stop Cycle</DisplayName>
    <Description>
      Terminate the seal cycle currently in progress.
      The following notes apply to this command:
      * This command may not work as intended because it is executed only after the StartCycle command has completed.
      * When the StopCycle process is executed, the seal cycle stops immediately, which may cause the seal roll to become slack. This condition can result in an error, so verify the seal roll status and take any required actions.
      - The StopCycle process can be executed via the GUI without waiting for the StartCycle command to complete.

      Calling this command invokes the instrument command StopCycle.

      Status required to execute this command: Running
      Status while this command is running: Same as the status at the start of execution
      Status after this command finishes
        If it completes normally: Idle
        If an error occurs: Error
    </Description>
    <Observable>Yes</Observable>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>SetSealingTime</Identifier>
    <DisplayName>Set Sealing Time</DisplayName>
    <Description>
      Assign the specified parameter value as the seal-cycle duration (in seconds).

      Calling this command invokes the instrument command SetSealingTime.

      Status required to execute this command: Idle, Running
      Status while this command is running: Same as the status at the start of execution
      Status after this command finishes
        If it completes normally: Same as the status at the start of execution
        If an error occurs: Error
    </Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>SealingTime</Identifier>
      <DisplayName>Sealing Time</DisplayName>
      <Description>The value to be set as sealing time.</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>Real</Basic>
          </DataType>
          <Constraints>
            <MinimalInclusive>0.5</MinimalInclusive>
            <MaximalInclusive>12.0</MaximalInclusive>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>SetSealingTemperature</Identifier>
    <DisplayName>Set Sealing Temperature</DisplayName>
    <Description>
      Assign the specified parameter value as the sealing temperature (°C) of the hot plate.

      Calling this command invokes the instrument command SetSealingTemperature.

      Status required to execute this command: Idle, Running
      Status while this command is running: Same as the status at the start of execution
      Status after this command finishes
        If it completes normally: Same as the status at the start of execution
        If an error occurs: Error
    </Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>SealingTemperature</Identifier>
      <DisplayName>Sealing Temperature</DisplayName>
      <Description>The value to be set as sealing temperature.</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>Integer</Basic>
          </DataType>
          <Constraints>
            <MinimalInclusive>20</MinimalInclusive>
            <MaximalInclusive>235</MaximalInclusive>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>Reset</Identifier>
    <DisplayName>Reset</DisplayName>
    <Description>
      Reset the server to its Idle state. This command is common to all instruments.
      If you call this command while another observable command is running, the request will be rejected.

      Calling this command invokes the instrument command Abort.

      Status required to execute this command: Error, Running
      Status while this command is running: Same as the status at the start of execution
      Status after this command finishes
        If it completes normally: Idle
        If an error occurs: Error
    </Description>
    <Observable>Yes</Observable>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>EnumerateProfiles</Identifier>
    <DisplayName>Enumerate Profiles</DisplayName>
    <Description>
      Enumerate profiles for PlateLoc.

      Calling this command invokes the instrument command EnumerateProfiles.

      Status required to execute this command: Idle, Running
      Status while this command is running: Same as the status at the start of execution
      Status after this command finishes:  Same as the status at the start of execution
    </Description>
    <Observable>No</Observable>
    <Response>
      <Identifier>ProfileNames</Identifier>
      <DisplayName>Profile names</DisplayName>
      <Description>
        The names of the profiles.
      </Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <!-- Properties -->
  <Property>
    <Identifier>SealingTemperature</Identifier>
    <DisplayName>Sealing Temperature</DisplayName>
    <Description>
      Get the sealing temperature (°C) currently set by the user.

      Reading this property invokes the instrument command GetSealingTemperature.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Integer</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>SealingTime</Identifier>
    <DisplayName>Sealing Time</DisplayName>
    <Description>
      Get the sealing time currently set by the user.

      Reading this property invokes the instrument command GetSealingTime.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Real</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>ActualTemperature</Identifier>
    <DisplayName>Actual Temperature</DisplayName>
    <Description>
      Actual temperature (°C) of the hot plate.

      Reading this property invokes the instrument command GetActualTemperature.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Integer</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
  </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>CycleCount</Identifier>
    <DisplayName>Cycle Count</DisplayName>
    <Description>
      The count of seal cycles performed.

      Reading this property invokes the instrument command GetCycleCount.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Integer</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>FirmwareVersion</Identifier>
    <DisplayName>Firmware Version</DisplayName>
    <Description>
      The firmware version of the instrument.

      Reading this property invokes the instrument command GetFirmwareVersion.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>String</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>Version</Identifier>
    <DisplayName>Version</DisplayName>
    <Description>
      The version number of the PlateLoc ActiveX Control.

      Reading this property invokes the instrument command GetVersion.

      Status required to get this property: Idle, Running
    </Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>String</Basic>
    </DataType>
    <DefinedExecutionErrors>
      <Identifier>NotInitialized</Identifier>
      <Identifier>InstrumentErrorOccurred</Identifier>
      <Identifier>InvalidInstrumentStatusError</Identifier>
    </DefinedExecutionErrors>
  </Property>
  <Property>
    <Identifier>Status</Identifier>
    <DisplayName>Status</DisplayName>
    <Description>
      Returns the status of the instrument. This property is common to all instruments.
      0: Not Connected
      1: Idle
      2: Running
      3: Error
    </Description>
    <Observable>Yes</Observable>
    <DataType>
      <Constrained>
        <DataType>
          <Basic>Integer</Basic>
        </DataType>
        <Constraints>
          <MinimalInclusive>0</MinimalInclusive>
          <MaximalInclusive>3</MaximalInclusive>
        </Constraints>
      </Constrained>
    </DataType>
  </Property>

  <!-- Error definitions -->
  <DefinedExecutionError>
    <Identifier>CommandIsRunning</Identifier>
    <DisplayName>Command is running</DisplayName>
    <Description>
      The command is currently running. Please retry after the execution is completed.
    </Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>NotInitialized</Identifier>
    <DisplayName>Not Initialized</DisplayName>
    <Description>
      PlateLoc is not initialized. The possible causes are as follows:
      * PlateLoc is not connected to the PC running PlateLocController.
      * The profile for PlateLoc has not been created or the correct profile is not specified.
    </Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>CommandExecutionAborted</Identifier>
    <DisplayName>Command Execution Aborted</DisplayName>
    <Description>
      The command execution was aborted because an error occurred.
    </Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>InstrumentErrorOccurred</Identifier>
    <DisplayName>Instrument Error Occurred</DisplayName>
    <Description>
      An error occurred on the instrument during command execution. Inspect the instrument.
    </Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>InvalidInstrumentStatusError</Identifier>
    <DisplayName>Invalid Instrument Status Error</DisplayName>
    <Description>
      The instrument is not in a valid status to accept the specified command.
    </Description>
  </DefinedExecutionError>

</Feature>